CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<UserStem>.*)_(?P<Well>[a-pA-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<Date>[\\\\d-]*)[\\\\\\\\/](?P<Plate>[0-9]{5})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigAGP': u'Plate', u'OrigER': u'Plate', u'OrigRNA': u'Plate', u'OrigDNA': u'Plate', u'OrigMito': u'Plate'}, {u'OrigAGP': u'Well', u'OrigER': u'Well', u'OrigRNA': u'Well', u'OrigDNA': u'Well', u'OrigMito': u'Well'}, {u'OrigAGP': u'Site', u'OrigER': u'Site', u'OrigRNA': u'Site', u'OrigDNA': u'Site', u'OrigMito': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:OrigAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumDNA
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumER
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumER
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumRNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumRNA
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IllumAGP
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumAGP
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumMito
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:\\\\\\\\iodine\\\\imaging_analysis
    Cluster root path:/imaging/analysis
    Local root path:\\\\\\\\iodine\\\\cbnt_cbimageX
    Cluster root path:/cbnt/cbimageX
